import bdv.util.*;
import ij.*;
import ij.process.FloatProcessor;
import ij.gui.*;
import ij.Prefs;
import ij.util.ThreadUtil;
import ij.plugin.*;
import ij.gui.*;

import java.util.concurrent.*;
import java.util.Arrays;
import java.util.ArrayList;
import java.util.stream.*;
import ij3d.*;

import org.apache.commons.math3.distribution.NormalDistribution;
import org.apache.commons.math3.distribution.BinomialDistribution;

import org.janelia.saalfeldlab.n5.*;
import org.janeliai.saalfeldlab.n5.imglib2.*;
import org.janelia.saalfeldlab.n5.imglib2.*;

import net.imglib2.img.display.imagej.*;
import net.imglib2.img.imageplus.*;
import net.imglib2.realtransform.*;
import net.imglib2.util.*;
import net.imglib2.view.*;
import net.imglib2.Cursor;


import java.awt.event.*;

import fiji.util.gui.GenericDialogPlus;

import java.io.*;
import java.nio.file.*;

//Results table
results_table =  new ij.measure.ResultsTable(1);
results_table.addValue("Prediction 1 Directory", "");
results_table.addValue("Prediction 2 Directory", "");
results_table.addValue("Raw Data Directory", "");
results_table.addValue("Selected Organelles", "");

//Evaluation summary plot
final Plot plot = new Plot("Evaluation Summary","Best Category","Counts");
plot.setColor("black","black");
plot.setXYLabels("{Prediction 1,Prediction 2,Neither}",null);
plot.add("separated bar",new double[]{0,0,0});
current_limits = plot.getLimits();
plot.setLimits(new double[]{current_limits[0],current_limits[1],0,1});

//Dialog boxes
data_select_dialog_box = new GenericDialogPlus("Select Data");
subvolume_setup_dialog_box = new NonBlockingGenericDialog("Subvolume Setup");
categorize_dialog_box = new NonBlockingGenericDialog("Prediction Comparison");
out_of_crops_dialog = new GenericDialogPlus("No More Crops");


//Variables
prediction_1_directory = "";
prediction_2_directory = "";
output_file = "";
training_crops_file = "";
training_crops_info = new ArrayList();

n5_prediction_1 = new N5FSReader("");
n5_prediction_2 = new N5FSReader("");
n5_raw_and_mask = new N5FSReader("");

start_coordinates_array = new ArrayList();
end_coordinates_array = new ArrayList();
thread_start_coordinates = new long[]{-1, -1, -1};
thread_end_coordinates = new long[]{-1, -1, -1};
start_coordinates = new long[]{-1,-1,-1};
end_coordinates = new long[]{-1,-1,-1};
crop_coordinates = "";
use_training_crops_for_evaluation = false;

organelle_checkbox_labels_list = new ArrayList();
organelle_checkbox_to_channel_mapping_list = new ArrayList();
evaluating_organelle = "";
selected_organelles_list = new ArrayList();
selected_organelle = "";

active_channels_list = new ArrayList();
organelle_color_checkboxes = "";

image_dimensions = new long[]{0,0,0};
edge_length = 150;
organelle_image_array = new ImagePlus[2][7];
composite_images = new CompositeImage[2];

organelle_crop_count = 0;
evaluation_result_counts = new double[]{0,0,0};
evaluation_result_counts_for_stats = new double[]{0,0,0};

blind_image_array_assignments = new int[]{-1,-1};
composite_image_suffix = new String[]{"A","B"};

stop_coordinates_thread = false;

normal_distribution = new NormalDistribution();
probability_predictions_are_this_different_by_chance = 1;

public class ReadAndProcessImageInThread implements Runnable {
	//Class used to read and process images within a thread
 	
 	//Class parameters needed to read the appropriate data/prediction
 	int index_in_image_array, prediction_index;
 	String current_organelle;
 	n5_current = new N5FSReader("");
 	
	public ReadAndProcessImageInThread(int prediction_supplied, int index_supplied){
		//Constructor

		//Prediction and indices are provided
		prediction_index = prediction_supplied;
		index_in_image_array=index_supplied;

		//The raw data (index 0) is put in index 3 (so it is gray) in the actual image, so need to shift the lower indices
		if(index_supplied<=3){
			index_in_image_array--; 
		}
		
		if(index_supplied == 0){//raw data
			index_in_image_array=3;
			current_organelle = "/volumes/raw";
			n5_current=n5_raw_and_mask;
		}
		else{//Predictions
			current_organelle = evaluating_organelle;
			if(prediction_index==0){ n5_current=n5_prediction_1;}
			else{n5_current=n5_prediction_2;}
		}
	}
	
    public void run(){
		//If an organelle is selected for this channel, read in the data, crop it and convert it to ImagePlus
		img_current = N5Utils.open(n5_current, current_organelle);
		img_current_cropped = Views.interval(img_current, start_coordinates, end_coordinates);
		ImagePlus imp_current_cropped = ImageJFunctions.wrap(img_current_cropped, "temp");
		if (index_in_image_array==3){//This is the raw data which we adjust differently
			contrastEnahncer = new ij.plugin.ContrastEnhancer();
			contrastEnahncer.stretchHistogram(imp_current_cropped, 0.35);
		}
		else{//Otherwise, we set the default to 127: need to set display range to 126 for it to start display at 127
			imp_current_cropped.setDisplayRange(126, 126);
		}
		//Set the image dimensions and add it to the image array
		imp_current_cropped.setDimensions(1, edge_length, 1);
		organelle_image_array[prediction_index][index_in_image_array] = imp_current_cropped;
    }
}
 
public class MultithreadedImageReadingAndProcessing extends Thread {
	//Class to create threads and run image processing on many threads
	Thread[] threads = ThreadUtil.createThreadArray(2+2);//all organelles + 1 raw for each prediction, times 2 for two datasets
	public void run (){
		 ithread = 0;
		 for (prediction = 0; prediction<2; prediction++){//loop over the predicitions
			 for (organelle_index = 0; organelle_index<=1; organelle_index++){//loop over all the data needed for each composite; one for organelle of interest, one for predictions
			 		//Set up the actual process for each thread
					Runnable runnable = new ReadAndProcessImageInThread(prediction, organelle_index);
				   	threads[ithread] = new Thread(runnable);
				   	ithread++;
			 }
		}
		//Run the threads
		ThreadUtil.startAndJoin(threads);
	}
}

public class COSEM_Predictions_Evaluation implements PlugIn, KeyListener, MouseListener {

	//Class for this plugin

		//Create dialog boxes
	public void dataSelectDialogBox(){
		//Dialog box to get source directory and output file for saving results
		data_select_dialog_box.addDirectoryField("Prediction 1", Prefs.get("COSEM_Predictions_Evaluation.prediction_1_directory","/nrs/saalfeld/heinrichl/cell/gt061719/unet/02-070219/hela_cell3_314000.n5/"),75);
		data_select_dialog_box.addDirectoryField("Prediction 2", Prefs.get("COSEM_Predictions_Evaluation.prediction_2_directory","/nrs/saalfeld/heinrichl/cell/gt061719/unet/02-070219/hela_cell3_593000.n5/"),75);
		data_select_dialog_box.addDirectoryField("Raw Data",Prefs.get("COSEM_Predictions_Evaluation.raw_directory","/groups/cosem/cosem/data/HeLa_Cell3_4x4x4nm/HeLa_Cell3_4x4x4nm.n5/"),75);
		data_select_dialog_box.addFileField("Output File", Prefs.get("COSEM_Predictions_Evaluation.output_file","/groups/cosem/cosem/data/prediction_results.csv"),75);
		data_select_dialog_box.addCheckbox("Evaluate Training Crops",false);

		data_select_dialog_box.showDialog();
		if (data_select_dialog_box.wasCanceled()) return;

		//Get directories and create corresponding n5 readers
		prediction_1_directory = data_select_dialog_box.getNextString();
		prediction_2_directory = data_select_dialog_box.getNextString();
		raw_directory = data_select_dialog_box.getNextString();
		n5_prediction_1 = new N5FSReader(prediction_1_directory);
		n5_prediction_2 = new N5FSReader(prediction_2_directory);
		n5_raw_and_mask = new N5FSReader(raw_directory);
		output_file = data_select_dialog_box.getNextString();
		use_training_crops_for_evaluation = data_select_dialog_box.getCheckboxes().get(0).getState();
		
		//Get info about training crops
		if(use_training_crops_for_evaluation){
			File[] version_directories = new File(raw_directory + "/volumes/groundtruth/").listFiles(directoryFilter);
			for(int version_index = 0; version_index<version_directories.length; version_index++){
				File[] training_crop_directories = version_directories[version_index].listFiles(directoryFilter);
				for(int crop_index=0; crop_index<training_crop_directories.length; crop_index++){
				
	    			String data =  new String(Files.readAllBytes(Paths.get(training_crop_directories[crop_index].getAbsolutePath()+"/labels/all/attributes.json", new String[0]))); 
	    			
					offsets_string = data.split("\"offset\": \\[")[1].split("]")[0].replaceAll("\\s","").split(",");
					offsets = new int[]{Float.parseFloat(offsets_string[0])/4, Float.parseFloat(offsets_string[1])/4, Float.parseFloat(offsets_string[2])/4};
	
					dimensions_string = data.split("\"dimensions\": \\[")[1].split("]")[0].replaceAll("\\s","").split(",");
					dimensions = new int[]{Integer.parseInt(dimensions_string[0])/2, Integer.parseInt(dimensions_string[1])/2, Integer.parseInt(dimensions_string[2])/2};
	    			
	    			training_crops_info.add(new int[]{offsets[0], offsets[1], offsets[2], dimensions[0], dimensions[1], dimensions[2]}); 
	    			
				}
			}
			Collections.shuffle(training_crops_info); //Randomize the order
		}
		
		
		//Add directories to results table
		results_table.addValue("Prediction 1 Directory", prediction_1_directory);
		results_table.addValue("Prediction 2 Directory", prediction_2_directory);
		results_table.addValue("Raw Data Directory", raw_directory);

		//Save to prefs
		Prefs.set("COSEM_Predictions_Evaluation.prediction_1_directory", prediction_1_directory);
		Prefs.set("COSEM_Predictions_Evaluation.prediction_2_directory", prediction_2_directory);
		Prefs.set("COSEM_Predictions_Evaluation.raw_directory", raw_directory);
		Prefs.set("COSEM_Predictions_Evaluation.output_file", output_file);
		Prefs.savePreferences();
		
		//Get image dimensions
		image_dimensions = n5_raw_and_mask.getDatasetAttributes("/volumes/raw").getDimensions();
	}

	public void subvolumeSetupDialogBox(){
		//Dialog box to select which organelles will be displayed

		//Find the organelles common to each list and create an array with them (also add None option)
		File[] predictionDirectories1 = new File(prediction_1_directory).listFiles(directoryFilter);
		File[] predictionDirectories2 = new File(prediction_2_directory).listFiles(directoryFilter);
		common_organelles_list = new ArrayList();
		for(i = 0; i<predictionDirectories1.length; i++){
			currentOrganelle = predictionDirectories1[i].getName();
			for(j=0; j<predictionDirectories2.length; j++){
				if( predictionDirectories2[j].getName().equals(currentOrganelle)){
					common_organelles_list.add(currentOrganelle);			
					break;
				}
			}
		}
		
		String[] common_organelles_array = new String[common_organelles_list.size()];
		common_organelles_array = common_organelles_list.toArray(common_organelles_array);
		subvolume_setup_dialog_box.addChoice("Organelle To Evaluate: ",common_organelles_array, common_organelles_array[0]);

		if(!use_training_crops_for_evaluation){//Then not using training crops
			//Add box for choosing image size
			subvolume_setup_dialog_box.addNumericField("Image Size (pixels)",150,0);
		}
		
		subvolume_setup_dialog_box.showDialog();

		//Add organelle choices to results table and create string for display and for table
		organelle_table_string = "";
		if (subvolume_setup_dialog_box.wasOKed()){
			organelle_choices = subvolume_setup_dialog_box.getChoices();
			evaluating_organelle = organelle_choices.get(0).getSelectedItem();
			active_channels_list.add(true);//start with that channel on
			selected_organelles_list.add(evaluating_organelle);
			String str = "Red: " + evaluating_organelle + ", p same: %.4f";
			organelle_checkbox_labels_list.add(String.format(str,new Object[]{new Float(1)}));
				//" + evaluating_organelle + ", p same: "));
			organelle_table_string += evaluating_organelle +",";
			organelle_checkbox_to_channel_mapping_list.add(0);

			organelle_checkbox_to_channel_mapping_list.add(1); //Gray will always be active by default
			organelle_checkbox_labels_list.add("Gray: Raw Data");
			organelle_table_string = organelle_table_string.substring(0,organelle_table_string.length()-1); 
			results_table.addValue("Selected Organelles", organelle_table_string);
			selected_organelle = selected_organelles_list.get(0);
			active_channels_list.add(true);//start with that channel on

			if(!use_training_crops_for_evaluation){
				edge_length = (Integer)subvolume_setup_dialog_box.getNextNumber();
			}

			//new Thread(test).start();
			if(!use_training_crops_for_evaluation){

				new Thread(new Runnable(){
					public void run(){
						while(!stop_coordinates_thread && start_coordinates_array.size()<=300){
							getEvaluationCropCoordinates();
						}
					}
				}).start();
				
				getValidImageCoordinates();
			}

			generateNewSubvolumes();
			results_table.show("Prediction Results");
			plot.show(); 
		}
	}
	
	FileFilter directoryFilter = new FileFilter() {
			public boolean accept(File file) {
				return file.isDirectory();
			}
	};

	public void addEvaluationToTableAndPlot(evaluation_result){
		//Need to get actual prediction from blind randomization
		actual_prediction_evaluation_result = evaluation_result;
		if(evaluation_result == "Prediction A"){
			actual_prediction_evaluation_result = "Prediction  " + String.valueOf(blind_image_array_assignments[0]+1);
			evaluation_result_counts[blind_image_array_assignments[0]]+=1;
			evaluation_result_counts_for_stats[blind_image_array_assignments[0]]+=1;
		}
		else if (evaluation_result == "Prediction B"){
			actual_prediction_evaluation_result = "Prediction  " + String.valueOf(blind_image_array_assignments[1]+1);
			evaluation_result_counts[blind_image_array_assignments[1]]+=1;
			evaluation_result_counts_for_stats[blind_image_array_assignments[1]]+=1;
		}
		else if(evaluation_result == "Neither - Good"){
			evaluation_result_counts[2]+=1;
			//both good
			evaluation_result_counts_for_stats[0]+=1;
			evaluation_result_counts_for_stats[1]+=1;
		}
		else{//Neither Bad
			evaluation_result_counts[2]+=1;
		}
		evaluation_result_counts_for_stats[2]+=1;//total
			
		probability_predictions_are_this_different_by_chance = hypothesisTesting();
		

		//Update plot
		plot.add("separated bar",evaluation_result_counts);
		limits = plot.getLimits();
		max_y = 0;
		for (i=0;i<2;i++){
			if (evaluation_result_counts[i]>max_y){max_y = evaluation_result_counts[i];}
		}
		new_limits = new double[]{limits[0],limits[1],limits[2],max_y+1};
		plot.setLimits(new_limits);
		plotWindow = plot.show();

		//Update results table
		results_table.setValue(selected_organelle+" Crop Coordinates",organelle_crop_count, crop_coordinates);  
		results_table.setValue(selected_organelle+" Prediction Evaluation",organelle_crop_count,actual_prediction_evaluation_result);

		//Update selected organelle's checkbox label with count
		organelle_color_checkboxes = categorize_dialog_box.getCheckboxes();
		current_label = organelle_color_checkboxes.get(0).getLabel();
		old_count = String.valueOf(organelle_crop_count);
		new_count = String.valueOf(organelle_crop_count+1);
		//new_label = current_label.replace("(" + old_count + ")", "(" +  new_count + ")");
		String new_label = current_label.substring(0, current_label.length()-6) + "%.4f";
		new_label = String.format(new_label, new Object[]{new Float(probability_predictions_are_this_different_by_chance)});
		organelle_color_checkboxes.get(0).setLabel(new_label);
		organelle_crop_count++;			

		//Fill rest of table and save it
		addEmptyEntriesToResultsTable(); 
		results_table.show("Prediction Results"); 
		results_table.saveAs(output_file); 

		if(!use_training_crops_for_evaluation && probability_predictions_are_this_different_by_chance<0.01){
			predictions_are_different_dialog = new GenericDialogPlus("Predictions Are Stat. Sig. Different!");
			predictions_are_different_dialog.addMessage(String.format("The odds that Prediction 0 and Prediction 1 would be this different by chance is: %.4f\n", new Object[]{new Float(probability_predictions_are_this_different_by_chance)}));
			predictions_are_different_dialog.showDialog();
		}

		//Get new subvolume
		generateNewSubvolumes();
	}

	public double hypothesisTesting(){
		// https://stats.stackexchange.com/questions/21581/how-to-assess-whether-a-coin-tossed-900-times-and-comes-up-heads-490-times-is-bi, https://en.wikipedia.org/wiki/Binomial_distribution#Cumulative_distribution_function
		// https://stats.stackexchange.com/questions/113602/test-if-two-binomial-distributions-are-statistically-different-from-each-other
		double total = evaluation_result_counts_for_stats[2];
		double p_hat_1 = evaluation_result_counts_for_stats[0]/total;
		double p_hat_2 = evaluation_result_counts_for_stats[1]/total;
		
		double p_smaller = Math.min(p_hat_1, p_hat_2);//do this so z is negative
		double p_larger = Math.max(p_hat_1, p_hat_2);
		print(p_smaller + " " + p_larger);
		double p_hat = (p_smaller + p_larger)/2; //"total"s cancel out
		
		double z = (p_smaller - p_larger)/Math.sqrt(p_hat*(1-p_hat)*(2/total));
		return normal_distribution.cumulativeProbability(z)*2;//times 2 because either can be larger 
	}

	public void toggleChannel(){
		//Function that toggles which channels are displayed
		for(checkbox_index=0; checkbox_index<organelle_color_checkboxes.size(); checkbox_index++){
			channel_index = organelle_checkbox_to_channel_mapping_list.get(checkbox_index);
			active_channels_list.set(channel_index, organelle_color_checkboxes.get(checkbox_index).getState());
		}
		active_channels_string = getActiveChannelsString();
		for (i=0; i<2; i++){
			composite_images[i].setActiveChannels(active_channels_string);
		}
	}

	public String getActiveChannelsString(){
		//Get currently active channels in string form required for setActiveChannels function
		active_channels_string = "";
		for (i=0; i<active_channels_list.size(); i++) {
  			channel_state = active_channels_list.get(i) ? "1" : "0";
  			active_channels_string+=channel_state;
		}
		return active_channels_string;
	}
	
	public void categorizeDialogBox(){
		//Dialog box to select which (if any) of the predictions was best
		prediction_A_button = new Button("Prediction A");
		prediction_B_button = new Button("Prediction B");
		neither_good_button = new Button("Neither - Good");
		neither_bad_button = new Button("Neither - Bad");

		categorize_dialog_box.addMessage("Evaluating Organelle: "+evaluating_organelle);

		//Add checkboxes for each organelle to turn it on/off and display evaluation counts
		String[] organelle_checkbox_labels_array = new String[organelle_checkbox_labels_list.size()];
		organelle_checkbox_labels_array = organelle_checkbox_labels_list.toArray(organelle_checkbox_labels_array);
		for(i=0; i<organelle_checkbox_labels_array.length; i++){
			categorize_dialog_box.addCheckbox(organelle_checkbox_labels_array[i],true);
		}

		//Setup callbacks to toggle channels when checkboxes toggled
		organelle_color_checkboxes = categorize_dialog_box.getCheckboxes();
		for(i=0; i<organelle_color_checkboxes.size(); i++){
			organelle_color_checkboxes.get(i).addItemListener(new ItemListener(){
				public void itemStateChanged(ItemEvent e){toggleChannel();}});
		}
		
		//Add listeners to each button to update/save the results table and get the next images
		prediction_A_button.addActionListener(new ActionListener(){ actionPerformed(ActionEvent e) { addEvaluationToTableAndPlot("Prediction A");} }); 
		prediction_B_button.addActionListener(new ActionListener(){ actionPerformed(ActionEvent e) { addEvaluationToTableAndPlot("Prediction B");} });
		neither_good_button.addActionListener(new ActionListener(){ actionPerformed(ActionEvent e) { addEvaluationToTableAndPlot("Neither - Good");} });
		neither_bad_button.addActionListener(new ActionListener(){ actionPerformed(ActionEvent e) { addEvaluationToTableAndPlot("Neither - Bad");} });

		//Add buttons and formatting
		categorize_dialog_box.addMessage("\n");//neeed so Done button actually appears
		categorize_dialog_box.add(prediction_A_button);
		categorize_dialog_box.add(prediction_B_button);
		categorize_dialog_box.add(neither_good_button);
		categorize_dialog_box.add(neither_bad_button);
		categorize_dialog_box.addMessage("\n ");//neeed so Done button actually appears
		categorize_dialog_box.setOKLabel("Done");
		categorize_dialog_box.hideCancelButton();
		categorize_dialog_box.showDialog();
	}

	public void generateNewSubvolumes(){
		//Function to actually create the merged images from a random starting coordinate. Categorize box is disabled until new images are loaded.
		
		categorize_dialog_box.disable();
		//Get image coordinates
		getValidImageCoordinates();
		//Add new coordinates to results table
		crop_coordinates = Arrays.toString(start_coordinates) + " - " + Arrays.toString(end_coordinates);
		//Run multithreaded processing
		multi = new MultithreadedImageReadingAndProcessing();
		multi.run();

		//Randomize Prediction A and B so that the user doesn't always know which side is which
		blind_image_array_assignments[0] = ThreadLocalRandom.current().nextInt(2); //image corresponding to Prediction A
		blind_image_array_assignments[1] = 1-blind_image_array_assignments[0]; //image corresponding to Prediction B
		
		//Display composite images
		for (i=0; i<2; i++){//Looping over prediction A, then prediction B
			current_image_array_index = blind_image_array_assignments[i];
			if (composite_images[i] == null){
				composite_images[i] = ij.plugin.RGBStackMerge.mergeChannels(organelle_image_array[current_image_array_index], false);
				composite_images[i].show();
			}
			else{
				active_channels_string = getActiveChannelsString();
				composite_images[i].setImage(ij.plugin.RGBStackMerge.mergeChannels(organelle_image_array[current_image_array_index], false));
				composite_images[i].setActiveChannels(active_channels_string);			
			}
			composite_images[i].setTitle("Prediction " + composite_image_suffix[i]);
		}
		categorize_dialog_box.enable();
	}

	public void getValidImageCoordinates(){
		//Function to ensure image coordinates are in mask and have sufficient organelle content
		if(use_training_crops_for_evaluation){
			getTrainingCropCoordinates();
		}
		else{

			while(start_coordinates_array.size() == 0 || end_coordinates_array.size() == 0){ //need to wait for thread to find coordinates
				Thread.sleep(100);
			}

			start_coordinates = start_coordinates_array.get(0);
			end_coordinates = end_coordinates_array.get(0);

			start_coordinates_array.remove(0);
			end_coordinates_array.remove(0);
		}
	}

	public void getEvaluationCropCoordinates(){

		getRandomCropCoordinates();
		while( !(croppedRegionIsInMask() && organelleIsInCroppedRegion())){
			getRandomCropCoordinates();
		}

		start_coordinates_array.add(thread_start_coordinates);
		end_coordinates_array.add(thread_end_coordinates);
	}

	public void getTrainingCropCoordinates(){
		if(training_crops_info.size>0){
			current_crop_info = training_crops_info.get(0);
			start_coordinates[0]=current_crop_info[0];
			start_coordinates[1]=current_crop_info[1];
			start_coordinates[2]=current_crop_info[2];
			end_coordinates[0]=start_coordinates[0]+current_crop_info[3];
			end_coordinates[1]=start_coordinates[1]+current_crop_info[4];
			end_coordinates[2]=start_coordinates[2]+current_crop_info[5];
			training_crops_info.remove(0);
		}
		else{
			out_of_crops_dialog.addMessage("Ran out of crop regions to check\n");
			out_of_crops_dialog.showDialog();
		}
	}

	public void getRandomCropCoordinates(){
		//Function to get random coordinates
		startX = ThreadLocalRandom.current().nextInt((Integer)image_dimensions[0]-(edge_length-1));
		startY = ThreadLocalRandom.current().nextInt((Integer)image_dimensions[1]-(edge_length-1));
		startZ = ThreadLocalRandom.current().nextInt((Integer)image_dimensions[2]-(edge_length-1));

		thread_start_coordinates=new long[] {startX, startY, startZ};
		thread_end_coordinates=new long[] {thread_start_coordinates[0]+edge_length-1, thread_start_coordinates[1]+edge_length-1, thread_start_coordinates[2]+edge_length-1};
	}
	
	public boolean croppedRegionIsInMask(){
		//Function to check if at least 20% of cropped region is in cell mask

		//Crop the mask which is downscaled by a factor of 2
		mask_start_coordinates = new long[]{Math.floor(thread_start_coordinates[0]/2.0), Math.floor(thread_start_coordinates[1]/2.0), Math.floor(thread_start_coordinates[2]/2.0)};
		mask_end_coordinates = new long[]{Math.floor(thread_end_coordinates[0]/2.0), Math.floor(thread_end_coordinates[1]/2.0), Math.floor(thread_end_coordinates[2]/2.0)};	
		img_mask = N5Utils.open(n5_raw_and_mask, "/volumes/masks/foreground");
		mask_cropped = Views.interval(img_mask, mask_start_coordinates, mask_end_coordinates);
		
		ImagePlus imp_mask_cropped = ImageJFunctions.wrap(mask_cropped, "temp");
		statistics = new ij.process.StackStatistics(imp_mask_cropped,256,0,255);
		return statistics.mean>=255.0*0.2; //20% within cell
	}

	public boolean organelleIsInCroppedRegion(){
		//Function to make sure at least 10 voxels of organelle are in at least one of the subvolumes 
		cropped_region_contains_organelle = false;
		if (numValidOrganelleVoxelsInCrop(n5_prediction_1)>=10 || numValidOrganelleVoxelsInCrop(n5_prediction_2)>=10){
			cropped_region_contains_organelle = true;
		}
		return cropped_region_contains_organelle; //any voxels assigned to desired organelle
	}

	public int numValidOrganelleVoxelsInCrop(n5){
		//Function to count how many organelle voxels are in crop
		organelle = N5Utils.open(n5, selected_organelle);

		organelle_cropped = Views.interval(organelle, thread_start_coordinates, thread_end_coordinates);
		ImagePlus imp_organelle_cropped = ImageJFunctions.wrap(organelle_cropped, "temp");		

		statistics = new ij.process.StackStatistics(imp_organelle_cropped,256,0,255);
		histogram = statistics.getHistogram();
		int num_valid_organelle_voxels = Arrays.stream(histogram, 127,256).sum(); //from is inclusive, to is exclusive so this will give us 127-255	

			
		return num_valid_organelle_voxels;
	}

	public void addEmptyEntriesToResultsTable(){
		columns = results_table.getHeadings();
		num_rows = results_table.size();
		for(row = 0; row<num_rows; row++){
			for(column = 0; column<columns.length; column++){
				if(results_table.getValueAsDouble(column, row) == 0){
					results_table.setValue(columns[column], row, "");
				}
			}
		}
	}
	
	public void run(){
		//Star the script
		dataSelectDialogBox();
		subvolumeSetupDialogBox();
		IJ.run("Synchronize Windows", "");
		IJ.run("Brightness/Contrast...");
		categorizeDialogBox();
		stop_coordinates_thread = true;
		WindowManager.closeAllWindows();
	}
 
}

new COSEM_Predictions_Evaluation().run(); //Run the script